CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:500
GitHash:
ModuleCount:111
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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    Extract image planes:No
    Split channels:Yes
    Split z-planes:Yes
    Split timepoints:Yes

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Experiment>[0-9]{6})_(?P<Site>[0-9]{3})_(?P<Marker>[A-Za-z0-9]+).tiff
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'DNA': 'Site', 'EcadCM': 'Site', 'Cdx2': 'Site', 'Krt8': 'Site'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:0.1625
    Relative pixel spacing in Y:0.1625
    Relative pixel spacing in Z:0.5
    Select the rule criteria:and (metadata does Marker "DNA")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Marker "Cdx2")
    Name to assign these images:Cdx2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Marker "Krt8")
    Name to assign these images:Krt8
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Marker "EcadCM")
    Name to assign these images:EcadCM
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
HistogramEqualization:[module_num:5|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
    Select the input image:DNA
    Name the output image:DNA_HE
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:60
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:No
    Tile Size (Z):60

Resize:[module_num:6|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
    Select the input image:DNA_HE
    Name the output image:ResizeDNA
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

HistogramEqualization:[module_num:7|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
    Select the input image:EcadCM
    Name the output image:EcadCM_HE
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:60
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:No
    Tile Size (Z):60

Resize:[module_num:8|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
    Select the input image:EcadCM_HE
    Name the output image:ResizeEcadCM
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

HistogramEqualization:[module_num:9|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
    Select the input image:Cdx2
    Name the output image:Cdx2_HE
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:60
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:No
    Tile Size (Z):60

Resize:[module_num:10|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
    Select the input image:Cdx2_HE
    Name the output image:ResizeCdx2
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

HistogramEqualization:[module_num:11|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
    Select the input image:Krt8
    Name the output image:Krt8_HE
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:60
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:No
    Tile Size (Z):60

Resize:[module_num:12|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
    Select the input image:Krt8_HE
    Name the output image:ResizeKrt8
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

RunStarDist:[module_num:13|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
    Select the input image:ResizeDNA
    Model Type:Custom 2D/3D
    Name the output object:RunStarDist
    Tile input image?:No
    Horizontal tiles:1
    Vertical tiles:1
    Save probability image?:No
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    Model folder:Default Input Folder sub-folder|3D_blastoid/rivron_blastoid
    Model:Versatile (fluorescent nuclei)
    Model:3D_demo
    Probability threshold:0.5
    Overlap threshold:0.4

GaussianFilter:[module_num:14|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
    Select the input image:ResizeEcadCM
    Name the output image:Smooth_EcadCM
    Sigma:3

GaussianFilter:[module_num:15|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
    Select the input image:ResizeDNA
    Name the output image:Smooth_DNA
    Sigma:3

GaussianFilter:[module_num:16|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
    Select the input image:ResizeKrt8
    Name the output image:Smooth_Krt8
    Sigma:3

GaussianFilter:[module_num:17|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
    Select the input image:ResizeCdx2
    Name the output image:Smooth_Cdx2
    Sigma:3

ImageMath:[module_num:18|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
    Operation:Add
    Raise the power of the result by:1.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Smooth_DNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Smooth_EcadCM
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Smooth_Krt8
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Smooth_Cdx2
    Multiply the fourth image by:1.0
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
Threshold:[module_num:19|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
    Select the input image:ImageAfterMath
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
Watershed:[module_num:20|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
    Select the input image:Threshold
    Name the output object:Blastoid
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:DNA_HE
    Connectivity:1
    Compactness:0.0
    Footprint:20
    Downsample:5
    Separate watershed labels:No
    Declump method:Intensity
    Reference Image:Smooth_DNA
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:ball,20

ConvertObjectsToImage:[module_num:21|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
    Select the input objects:Blastoid
    Name the output image:BlastoidImg
    Select the color format:Binary (black & white)
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
ConvertImageToObjects:[module_num:22|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
    Select the input image:BlastoidImg
    Name the output object:Blastoid2
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

FillObjects:[module_num:23|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
    Select the input object:Blastoid2
    Name the output object:FillObjects
    Minimum hole size:100
    Planewise fill:Yes
    Filling method:Holes

MeasureObjectSizeShape:[module_num:24|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
    Select object sets to measure:FillObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:25|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notes:['/Users/llanos/Documents/3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/rescale/241148_007_Krt8.tiff', '/Users/llanos/Documents/3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/rescale/241148_007_EcadCM.tiff', '/Users/llanos/Documents/3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/rescale/241148_007_DNA.tiff', '/Users/llanos/Documents/3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/rescale/241148_007_Cdx2.tiff']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
    Select the objects to filter:FillObjects
    Name the output objects:FillObject
    Select the filtering mode:Measurements
    Select the filtering method:Maximal
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Volume
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
RelateObjects:[module_num:26|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
    Parent objects:FillObject
    Child objects:RunStarDist
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Nuclei
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
ConvertObjectsToImage:[module_num:27|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
    Select the input objects:FillObject
    Name the output image:Blastoid2
    Select the color format:Binary (black & white)
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
DistanceTransform:[module_num:28|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
    Select the input image:Blastoid2
    Name the output image:DistanceTransform
    Rescale values from 0 to 1?:Yes

OverlayOutlines:[module_num:29|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DistanceTransform
    Name the output image:blastoid_distance
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:FillObjects

ConvertObjectsToImage:[module_num:30|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
    Select the input objects:Nuclei
    Name the output image:Markers
    Select the color format:uint16
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
Watershed:[module_num:31|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
    Select the input image:ResizeEcadCM
    Name the output object:Watershed
    Use advanced settings?:No
    Generate from:Markers
    Markers:Markers
    Mask:Threshold
    Connectivity:3
    Compactness:0.1
    Footprint:8
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

RelateObjects:[module_num:32|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
    Parent objects:Nuclei
    Child objects:Watershed
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectIntensity:[module_num:33|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
    Select images to measure:DistanceTransform
    Select objects to measure:Nuclei, Watershed

MeasureObjectNeighbors:[module_num:34|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:35|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
    Select the objects to filter:Nuclei
    Name the output objects:PolarCell
    Select the filtering mode:Measurements
    Select the filtering method:Maximal
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_Adjacent
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
ConvertObjectsToImage:[module_num:36|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
    Select the input objects:PolarCell
    Name the output image:PolarCell
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:37|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:NotPolarCell
    Image or measurement?:Image
    Select the first image:PolarCell
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
DistanceTransform:[module_num:38|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
    Select the input image:NotPolarCell
    Name the output image:DistanceTransform2
    Rescale values from 0 to 1?:Yes

MeasureObjectIntensity:[module_num:39|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
    Select images to measure:DistanceTransform, DistanceTransform2
    Select objects to measure:Nuclei, Watershed

FilterObjects:[module_num:40|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
    Select the objects to filter:Watershed
    Name the output objects:InnerCells_filter1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_DistanceTransform
    Filter using a minimum measurement value?:Yes
    Minimum value:0.28
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_DistanceTransform2
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.2
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
ConvertObjectsToImage:[module_num:41|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
    Select the input objects:InnerCells_filter1
    Name the output image:im_innercells_filter1
    Select the color format:uint16
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
MaskImage:[module_num:42|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
    Select the input image:im_innercells_filter1
    Name the output image:im_innernuclei_filter1
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

ConvertImageToObjects:[module_num:43|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
    Select the input image:im_innernuclei_filter1
    Name the output object:obj_innernuclei_filter1
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:44|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enabled:False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
    Select the input image:im_innernuclei_filter1
    Name the output object:InnerCells
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

RelateObjects:[module_num:45|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enabled:False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
    Parent objects:Nuclei
    Child objects:obj_innernuclei_filter1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectIntensity:[module_num:46|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
    Select images to measure:DistanceTransform, DistanceTransform2
    Select objects to measure:obj_innernuclei_filter1

FilterObjects:[module_num:47|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
    Select the objects to filter:obj_innernuclei_filter1
    Name the output objects:InnerCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MinIntensity_DistanceTransform
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MinIntensity_DistanceTransform2
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.12
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
FilterObjects:[module_num:48|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enabled:False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
    Select the objects to filter:obj_innernuclei_filter1
    Name the output objects:InnerCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MinIntensity_DistanceTransform_cavity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.000001
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:49|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
    Select images to measure:DistanceTransform2
    Select objects to measure:InnerCells

RelateObjects:[module_num:50|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
    Parent objects:Nuclei
    Child objects:InnerCells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:51|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
    Select the objects to filter:Nuclei
    Name the output objects:OutterCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_InnerCells_Count
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.1
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
MeasureObjectNeighbors:[module_num:52|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
    Select objects to measure:OutterCells
    Select neighboring objects to measure:InnerCells
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:53|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
    Select objects to measure:InnerCells
    Select neighboring objects to measure:OutterCells
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:54|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enabled:False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
    Select objects to measure:OutterCells
    Select neighboring objects to measure:InnerCells
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:55|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enabled:False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
    Select the objects to filter:OutterCells
    Name the output objects:PolarFiltered0
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_InnerCells_Expanded
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MeasureObjectNeighbors:[module_num:56|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enabled:False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
    Select objects to measure:OutterCells
    Select neighboring objects to measure:PolarFiltered0
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:57|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
    Select the objects to filter:OutterCells
    Name the output objects:PolarFiltered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_InnerCells_Expanded
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:58|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
    Select the objects to filter:OutterCells
    Name the output objects:MuralNoRegion
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_InnerCells_Expanded
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:0.9
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
MeasureObjectIntensity:[module_num:59|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
    Select images to measure:DistanceTransform2
    Select objects to measure:MuralNoRegion

FilterObjects:[module_num:60|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
    Select the objects to filter:MuralNoRegion
    Name the output objects:MuralNoRegion
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MinIntensity_DistanceTransform2
    Filter using a minimum measurement value?:Yes
    Minimum value:0.14
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:61|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
    Parent objects:MuralNoRegion
    Child objects:Watershed
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:MuralNoRegion_cells
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
RelateObjects:[module_num:62|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
    Parent objects:PolarFiltered
    Child objects:Watershed
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:PolarFiltered_cells
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
MeasureObjectNeighbors:[module_num:63|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
    Select objects to measure:PolarFiltered_cells
    Select neighboring objects to measure:MuralNoRegion_cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:64|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
    Select objects to measure:MuralNoRegion_cells
    Select neighboring objects to measure:PolarFiltered_cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:65|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
    Select the objects to filter:MuralNoRegion_cells
    Name the output objects:MuralFiltered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:TransitionZone
    Select the measurement to filter by:Neighbors_NumberOfNeighbors_PolarFiltered_cells_Adjacent
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
RelateObjects:[module_num:66|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
    Parent objects:MuralFiltered
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:MuralFiltered
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
RelateObjects:[module_num:67|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
    Parent objects:TransitionZone
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:TransitionZone
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
MeasureObjectNeighbors:[module_num:68|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
    Select objects to measure:MuralFiltered
    Select neighboring objects to measure:TransitionZone
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:69|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
    Select the objects to filter:MuralFiltered
    Name the output objects:MuralFiltered2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:TransitionZone2
    Select the measurement to filter by:Neighbors_NumberOfNeighbors_TransitionZone_20
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
MeasureObjectNeighbors:[module_num:70|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
    Select objects to measure:MuralFiltered2
    Select neighboring objects to measure:TransitionZone2
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:71|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
    Select the objects to filter:MuralFiltered2
    Name the output objects:MuralFiltered3
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:TransitionZone3
    Select the measurement to filter by:Neighbors_NumberOfNeighbors_TransitionZone2_20
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
MeasureObjectNeighbors:[module_num:72|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
    Select objects to measure:MuralFiltered3
    Select neighboring objects to measure:TransitionZone3
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:73|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
    Select the objects to filter:MuralFiltered3
    Name the output objects:MuralFiltered4
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:TransitionZone4
    Select the measurement to filter by:Neighbors_NumberOfNeighbors_TransitionZone3_20
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
ResizeObjects:[module_num:74|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
    Select the input object:InnerCells
    Name the output object:ICM_orig
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:75|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
    Select the input object:Nuclei
    Name the output object:Nuclei_orig
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:76|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
    Select the input object:Watershed
    Name the output object:Cells_orig
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:77|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
    Select the input object:PolarFiltered
    Name the output object:PolarFiltered_orig
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:78|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
    Select the input object:MuralFiltered
    Name the output object:MuralFiltered_orig
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:79|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
    Select the input object:TransitionZone
    Name the output object:Transition_orig
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:80|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
    Select the input object:TransitionZone2
    Name the output object:Transition2_orig
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:81|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
    Select the input object:TransitionZone3
    Name the output object:Transition3_org
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:82|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
    Select the input object:TransitionZone4
    Name the output object:Transition4_orig
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:83|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
    Select the input object:MuralFiltered4
    Name the output object:Transition5_orig
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:84|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
    Select the input object:PolarCell
    Name the output object:PolarCell_orig
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ConvertObjectsToImage:[module_num:85|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
    Select the input objects:PolarCell_orig
    Name the output image:PolarCell
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:86|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:NotPolarCell_orig
    Image or measurement?:Image
    Select the image:PolarCell
    Multiply the image by:1.0
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    Image or measurement?:Image
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    Multiply the image by:1.0
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
DistanceTransform:[module_num:87|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
    Select the input image:NotPolarCell_orig
    Name the output image:DistanceTransform2_orig
    Rescale values from 0 to 1?:Yes

RelateObjects:[module_num:88|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
    Parent objects:Nuclei_orig
    Child objects:PolarFiltered_orig
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:89|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
    Parent objects:Nuclei_orig
    Child objects:MuralFiltered_orig
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:90|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
    Parent objects:Nuclei_orig
    Child objects:ICM_orig
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:91|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
    Parent objects:Nuclei_orig
    Child objects:Transition_orig
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:92|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
    Parent objects:Nuclei_orig
    Child objects:Cells_orig
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
OverlayOutlines:[module_num:93|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
    Display outlines on a blank image?:Yes
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    Name the output image:OrigOverlay_DNA_PolarFiltered
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:PolarFiltered_orig

OverlayOutlines:[module_num:94|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
    Display outlines on a blank image?:Yes
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    Name the output image:OrigOverlay_DNA_MuralFiltered
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:MuralFiltered_orig

OverlayOutlines:[module_num:95|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
    Display outlines on a blank image?:Yes
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    Name the output image:OrigOverlay_DNA_Transition
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:Transition_orig

OverlayOutlines:[module_num:96|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
    Display outlines on a blank image?:Yes
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    Name the output image:OrigOverlay_DNA_ICM
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:ICM_orig

MeasureObjectSizeShape:[module_num:97|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enabled:False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
    Select object sets to measure:Cells_orig, Nuclei_orig
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

MeasureObjectNeighbors:[module_num:98|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enabled:False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
    Select objects to measure:Nuclei_orig
    Select neighboring objects to measure:Nuclei_orig
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensity:[module_num:99|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enabled:False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
    Select images to measure:Cdx2, DNA, DistanceTransform2_orig, EcadCM, Krt8
    Select objects to measure:Cells_orig, Nuclei_orig

CalculateMath:[module_num:100|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enabled:False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
    Name the output measurement:nuclear_Cdx2overDNA
    Operation:Divide
    Select the first operand measurement type:Object
    Select the first operand objects:Nuclei_orig
    Select the first operand measurement:Intensity_MeanIntensity_Cdx2
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:Cells_orig
    Select the second operand measurement:Intensity_MeanIntensity_DNA
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:101|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enabled:False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
    Name the output measurement:Cell_Krt8overDNA
    Operation:Divide
    Select the first operand measurement type:Object
    Select the first operand objects:Cells_orig
    Select the first operand measurement:Intensity_MeanIntensity_Krt8
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:Nuclei_orig
    Select the second operand measurement:Intensity_MeanIntensity_DNA
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:102|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enabled:False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
    Name the output measurement:EcadCMoverDNA
    Operation:Divide
    Select the first operand measurement type:Object
    Select the first operand objects:Cells_orig
    Select the first operand measurement:Intensity_MeanIntensity_EcadCM
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:Nuclei_orig
    Select the second operand measurement:Intensity_MeanIntensity_DNA
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
SaveImages:[module_num:103|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay_DNA_ICM
    Select method for constructing file names:Single name
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    Enter single file name:Overlay_\g<Site>_DNA_ICM_test10I
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:104|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay_DNA_MuralFiltered
    Select method for constructing file names:Single name
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    Enter single file name:Overlay_\g<Site>_DNA_MuralFiltered_test10I
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:105|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay_DNA_PolarFiltered
    Select method for constructing file names:Single name
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    Enter single file name:Overlay_\g<Site>_DNA_PolarFiltered_test10I
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:106|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay_DNA_Transition
    Select method for constructing file names:Single name
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    Enter single file name:Overlay_\g<Site>_DNA_Transition_test10I
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:107|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:DNA
    Select method for constructing file names:Single name
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    Enter single file name:\g<Site>_DNA_test10H
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:108|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
    Select the type of image to save:Image
    Select the image to save:ResizeDNA
    Select method for constructing file names:Single name
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    Enter single file name:Resize_\g<Site>_DNA
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:109|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
    Select the type of image to save:Image
    Select the image to save:ResizeEcadCM
    Select method for constructing file names:Single name
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    Enter single file name:Resize_\g<Site>_EcadCM
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:110|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
    Select the type of image to save:Image
    Select the image to save:ResizeKrt8
    Select method for constructing file names:Single name
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    Enter single file name:Resize_\g<Site>_Krt8
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:111|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
    Select the type of image to save:Image
    Select the image to save:ResizeCdx2
    Select method for constructing file names:Single name
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    Enter single file name:Resize_\g<Site>_Cdx2
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
