CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:500
GitHash:
ModuleCount:41
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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    Extract image planes:No
    Split channels:Yes
    Split z-planes:Yes
    Split timepoints:Yes

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Experiment>[0-9]{6})_(?P<Site>[0-9]{3})_(?P<Marker>[A-Za-z0-9]+).tiff
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'DNA': 'Site', 'EcadCM': 'Site', 'Cdx2': 'Site', 'Krt8': 'Site'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:0.1625
    Relative pixel spacing in Y:0.1625
    Relative pixel spacing in Z:0.5
    Select the rule criteria:and (metadata does Marker "DNA")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Marker "Cdx2")
    Name to assign these images:Cdx2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Marker "Krt8")
    Name to assign these images:Krt8
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Marker "EcadCM")
    Name to assign these images:EcadCM
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
HistogramEqualization:[module_num:5|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
    Select the input image:DNA
    Name the output image:DNA_HE
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:60
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:No
    Tile Size (Z):60

Resize:[module_num:6|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
    Select the input image:DNA_HE
    Name the output image:ResizeDNA
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

HistogramEqualization:[module_num:7|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
    Select the input image:EcadCM
    Name the output image:EcadCM_HE
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:60
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:No
    Tile Size (Z):60

Resize:[module_num:8|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
    Select the input image:EcadCM_HE
    Name the output image:ResizeEcadCM
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

HistogramEqualization:[module_num:9|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
    Select the input image:Cdx2
    Name the output image:Cdx2_HE
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:60
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:No
    Tile Size (Z):60

Resize:[module_num:10|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
    Select the input image:Cdx2_HE
    Name the output image:ResizeCdx2
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

HistogramEqualization:[module_num:11|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
    Select the input image:Krt8
    Name the output image:Krt8_HE
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:60
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:No
    Tile Size (Z):60

Resize:[module_num:12|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
    Select the input image:Krt8_HE
    Name the output image:ResizeKrt8
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

RunStarDist:[module_num:13|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
    Select the input image:ResizeDNA
    Model Type:Custom 2D/3D
    Name the output object:RunStarDist
    Tile input image?:No
    Horizontal tiles:1
    Vertical tiles:1
    Save probability image?:No
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    Model folder:Default Input Folder sub-folder|3D_blastoid/rivron_blastoid
    Model:Versatile (fluorescent nuclei)
    Model:3D_demo
    Probability threshold:0.5
    Overlap threshold:0.4

GaussianFilter:[module_num:14|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
    Select the input image:ResizeEcadCM
    Name the output image:Smooth_EcadCM
    Sigma:3

GaussianFilter:[module_num:15|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
    Select the input image:ResizeDNA
    Name the output image:Smooth_DNA
    Sigma:3

GaussianFilter:[module_num:16|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
    Select the input image:ResizeKrt8
    Name the output image:Smooth_Krt8
    Sigma:3

GaussianFilter:[module_num:17|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
    Select the input image:ResizeCdx2
    Name the output image:Smooth_Cdx2
    Sigma:3

ImageMath:[module_num:18|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
    Operation:Add
    Raise the power of the result by:1.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Smooth_DNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Smooth_EcadCM
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Smooth_Krt8
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Smooth_Cdx2
    Multiply the fourth image by:1.0
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
Threshold:[module_num:19|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
    Select the input image:ImageAfterMath
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
Watershed:[module_num:20|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
    Select the input image:Threshold
    Name the output object:Blastoid
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:20
    Downsample:5
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:ball,20

ConvertObjectsToImage:[module_num:21|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
    Select the input objects:Blastoid
    Name the output image:BlastoidImg
    Select the color format:Binary (black & white)
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
ConvertImageToObjects:[module_num:22|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
    Select the input image:BlastoidImg
    Name the output object:Blastoid2
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

FillObjects:[module_num:23|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
    Select the input object:Blastoid2
    Name the output object:FillObjects
    Minimum hole size:10
    Planewise fill:No
    Filling method:Convex hull

MeasureObjectSizeShape:[module_num:24|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
    Select object sets to measure:FillObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:25|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
    Select the objects to filter:FillObjects
    Name the output objects:FillObject
    Select the filtering mode:Measurements
    Select the filtering method:Maximal
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Volume
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
RelateObjects:[module_num:26|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
    Parent objects:FillObject
    Child objects:RunStarDist
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Nuclei
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
ConvertObjectsToImage:[module_num:27|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
    Select the input objects:FillObject
    Name the output image:Blastoid2
    Select the color format:Binary (black & white)
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
DistanceTransform:[module_num:28|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
    Select the input image:Blastoid2
    Name the output image:DistanceTransform
    Rescale values from 0 to 1?:Yes

ConvertObjectsToImage:[module_num:29|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
    Select the input objects:Nuclei
    Name the output image:Markers
    Select the color format:uint16
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
Watershed:[module_num:30|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
    Select the input image:ResizeEcadCM
    Name the output object:Watershed
    Use advanced settings?:No
    Generate from:Markers
    Markers:Markers
    Mask:Threshold
    Connectivity:3
    Compactness:0.1
    Footprint:8
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

RelateObjects:[module_num:31|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
    Parent objects:Nuclei
    Child objects:Watershed
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectIntensity:[module_num:32|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
    Select images to measure:DistanceTransform
    Select objects to measure:Nuclei, Watershed

MeasureObjectNeighbors:[module_num:33|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:34|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
    Select the objects to filter:Nuclei
    Name the output objects:PolarCell
    Select the filtering mode:Measurements
    Select the filtering method:Maximal
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_Adjacent
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
ConvertObjectsToImage:[module_num:35|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
    Select the input objects:PolarCell
    Name the output image:PolarCell
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:36|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:NotPolarCell
    Image or measurement?:Image
    Select the first image:PolarCell
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
DistanceTransform:[module_num:37|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
    Select the input image:NotPolarCell
    Name the output image:DistanceTransform2
    Rescale values from 0 to 1?:Yes

MeasureObjectIntensity:[module_num:38|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
    Select images to measure:DistanceTransform
    Select objects to measure:Nuclei, Watershed

FilterObjects:[module_num:39|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
    Select the objects to filter:Watershed
    Name the output objects:InnerCells_edgesout
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:1
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MinIntensity_DistanceTransform
    Filter using a minimum measurement value?:Yes
    Minimum value:0.3
    Filter using a maximum measurement value?:No
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    Select additional object to relabel:Nuclei
    Name the relabeled objects:inner_nuclei
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
MeasureObjectIntensity:[module_num:40|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
    Select images to measure:DistanceTransform2
    Select objects to measure:InnerCells_edgesout, inner_nuclei

FilterObjects:[module_num:41|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
    Select the objects to filter:inner_nuclei
    Name the output objects:InnerCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MinIntensity_DistanceTransform2
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.08
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