CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:138
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:Laminins_ITGs_stainings_(?P<Experiment>[0-9]{3})_(?P<Marker>[A-Za-z0-9]+)_(?P<suffix>.*).tiff
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'DNA': 'Experiment', 'EcadCM': None, 'SOX2': None, 'Factin': None}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:0.5
    Relative pixel spacing in Y:0.5
    Relative pixel spacing in Z:0.5
    Select the rule criteria:and (metadata does Marker "c3")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Marker "c1")
    Name to assign these images:SOX2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Marker "c2")
    Name to assign these images:Factin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Marker "c0")
    Name to assign these images:EcadCM
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
HistogramEqualization:[module_num:5|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enabled:False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
    Select the input image:DNA
    Name the output image:DNA_HE
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:30
    Clip limit:0.001
    Is your image 3D?:Yes
    Do framewise calculation?:No
    Tile Size (Z):60

Resize:[module_num:6|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
    Select the input image:DNA
    Name the output image:ResizeDNA
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.5
    Y Resizing factor:0.5
    Z Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

HistogramEqualization:[module_num:7|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
    Select the input image:EcadCM
    Name the output image:EcadCM_HE
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:60
    Clip limit:0.01
    Is your image 3D?:Yes
    Do framewise calculation?:No
    Tile Size (Z):60

Resize:[module_num:8|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
    Select the input image:EcadCM_HE
    Name the output image:ResizeEcadCM
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.5
    Y Resizing factor:0.5
    Z Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

HistogramEqualization:[module_num:9|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
    Select the input image:SOX2
    Name the output image:SOX2_HE
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:60
    Clip limit:0.01
    Is your image 3D?:Yes
    Do framewise calculation?:No
    Tile Size (Z):60

Resize:[module_num:10|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
    Select the input image:SOX2_HE
    Name the output image:ResizeSOX2
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.5
    Y Resizing factor:0.5
    Z Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

HistogramEqualization:[module_num:11|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
    Select the input image:Factin
    Name the output image:Factin_HE
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:60
    Clip limit:0.01
    Is your image 3D?:Yes
    Do framewise calculation?:No
    Tile Size (Z):60

Resize:[module_num:12|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
    Select the input image:Factin_HE
    Name the output image:ResizeFactin
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.5
    Y Resizing factor:0.5
    Z Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

RunStarDist:[module_num:13|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
    Select the input image:ResizeDNA
    Model Type:Custom 2D/3D
    Name the output object:RunStarDist_nuclei
    Tile input image?:No
    Horizontal tiles:1
    Vertical tiles:1
    Save probability image?:No
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    Model folder:Default Input Folder sub-folder|3D_blastoid/rivron_blastoid
    Model:Versatile (fluorescent nuclei)
    Model:3D_demo
    Probability threshold:0.5
    Overlap threshold:0.4
    Manually set how much GPU memory each worker can use?:No
    GPU memory (in GB) for each worker:0.5

ConvertObjectsToImage:[module_num:14|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enabled:False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
    Select the input objects:RunStarDist_nuclei
    Name the output image:StarDist_segmentation
    Select the color format:uint16
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
EnhanceOrSuppressFeatures:[module_num:15|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enabled:False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
    Select the input image:ResizeFactin
    Name the output image:membrane
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Tubeness
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    Rescale result image:No

GaussianFilter:[module_num:16|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
    Select the input image:ResizeEcadCM
    Name the output image:Smooth_EcadCM
    Sigma:4

GaussianFilter:[module_num:17|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
    Select the input image:ResizeDNA
    Name the output image:Smooth_DNA
    Sigma:4

GaussianFilter:[module_num:18|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
    Select the input image:ResizeFactin
    Name the output image:Smooth_Factin
    Sigma:4

GaussianFilter:[module_num:19|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
    Select the input image:ResizeSOX2
    Name the output image:Smooth_SOX2
    Sigma:4

ImageMath:[module_num:20|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notes:['This module sum all intensities in order to get the whole blastoid shape', 'In case that you use this pipeline for others markers. balance the intensity for each channels to have a more homogenous intensity across the blastoid. Check the blastoid object generated, and see if is necessary to balance this intensities.']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
    Operation:Add
    Raise the power of the result by:1.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAllChannels
    Image or measurement?:Image
    Select the first image:Smooth_DNA
    Multiply the first image by:0.01
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    Image or measurement?:Image
    Select the second image:Smooth_EcadCM
    Multiply the second image by:1
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    Image or measurement?:Image
    Select the third image:ResizeFactin
    Multiply the third image by:20
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
Threshold:[module_num:21|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notes:['to segment the blastoid shape']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
    Select the input image:ImageAllChannels
    Name the output image:Threshold_blastoid
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.005,1.0
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    Size of adaptive window:25
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Median absolute deviation
    # of deviations:2.0
    Thresholding method:Robust Background

Watershed:[module_num:22|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enabled:False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
    Select the input image:Threshold_blastoid
    Name the output object:Blastoid_mask
    Use advanced settings?:Yes
    Generate from:Distance
    Markers:None
    Mask:DNA_HE
    Connectivity:1
    Compactness:0.0
    Footprint:20
    Downsample:5
    Separate watershed labels:No
    Declump method:Intensity
    Reference Image:Smooth_DNA
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:ball,20

ConvertObjectsToImage:[module_num:23|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enabled:False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
    Select the input objects:Blastoid_mask
    Name the output image:Blastoid_mask_img
    Select the color format:Binary (black & white)
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
ConvertImageToObjects:[module_num:24|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notes:['convert the image to object to can dilate the object in the next module.']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
    Select the input image:Threshold_blastoid
    Name the output object:Blastoid_object
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

DilateObjects:[module_num:25|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notes:['dilate the object to fill some small holes and borders.']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
    Select the input object:Blastoid_object
    Name the output object:Blastoid_object_dilated
    Structuring element:disk,4

Watershed:[module_num:26|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notes:['apply to watershed to identify different objects']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
    Select the input image:Threshold_blastoid
    Name the output object:Blastoid_mask2
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:DNA_HE
    Connectivity:1
    Compactness:0.0
    Footprint:20
    Downsample:5
    Separate watershed labels:No
    Declump method:Intensity
    Reference Image:Smooth_DNA
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:ball,20

ConvertObjectsToImage:[module_num:27|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notes:['convert the object to image to identify all the objects as one']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
    Select the input objects:Blastoid_object_dilated
    Name the output image:Blastoid_mask_img2
    Select the color format:Binary (black & white)
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
ConvertImageToObjects:[module_num:28|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notes:['convert the provious image as an object to identify the identify the small object that are no part of the main one']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
    Select the input image:Blastoid_mask_img2
    Name the output object:Blastoid_object2
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

FillObjects:[module_num:29|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enabled:False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
    Select the input object:Blastoid_object_dilated
    Name the output object:Blastoid_object_filled
    Minimum hole size:200
    Planewise fill:Yes
    Filling method:Holes

FillObjects:[module_num:30|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notes:['fill the cavity of the main blastoid object']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
    Select the input object:Blastoid_object2
    Name the output object:Blastoid_object_filled
    Minimum hole size:200
    Planewise fill:Yes
    Filling method:Holes

MeasureObjectSizeShape:[module_num:31|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notes:['measure all the objects to filter the smalls one and getjust the biggest one']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
    Select object sets to measure:Blastoid_object_filled
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:32|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notes:['get the object with the maximal area. this will be the final filled blastoid object']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
    Select the objects to filter:Blastoid_object_filled
    Name the output objects:Blastoid_object_final
    Select the filtering mode:Measurements
    Select the filtering method:Maximal
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Volume
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
RelateObjects:[module_num:33|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notes:['relate the nuclei segmented with stardist to the Blastoid_object_final']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
    Parent objects:Blastoid_object_final
    Child objects:RunStarDist_nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Nuclei
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
ConvertObjectsToImage:[module_num:34|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notes:['to get the distance map it is necessary to convert the  Blastoid object to image']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
    Select the input objects:Blastoid_object_final
    Name the output image:Blastoid_image_final
    Select the color format:Binary (black & white)
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
DistanceTransform:[module_num:35|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notes:['get the distance map. This will allow us to detect the object that are in the outer layer of the blastoid.']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
    Select the input image:Blastoid_image_final
    Name the output image:DistanceMap_Blastoid
    Rescale values from 0 to 1?:Yes

ConvertObjectsToImage:[module_num:36|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notes:['convert nuclei object to images in a color format. Then each object in the output image will have a different gray color. This was required because to segment the cells it is necessary to give the nuclei as a seed, and the nuclei  markers should be an image (not an object)']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
    Select the input objects:Nuclei
    Name the output image:Nuclei_Markers
    Select the color format:uint16
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
Watershed:[module_num:37|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notes:['Segmenting the Cells objects', 'here it is used the threshold blastoid as a mask to define where to find the cells, and the nuclei marker as a seed. ']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
    Select the input image:ResizeEcadCM
    Name the output object:Cells_objects
    Use advanced settings?:No
    Generate from:Markers
    Markers:Nuclei_Markers
    Mask:Threshold_blastoid
    Connectivity:3
    Compactness:0.1
    Footprint:8
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

RelateObjects:[module_num:38|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notes:['relate the nuclei object to the Cells objects. ']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
    Parent objects:Nuclei
    Child objects:Cells_objects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectIntensity:[module_num:39|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notes:['Based on the Distance map image from the Blastoid object, calculate the distance of cells and nuclei objects. Then we can select the objects that are closer to the border.']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
    Select images to measure:DistanceMap_Blastoid
    Select objects to measure:Cells_objects, Nuclei

MeasureObjectNeighbors:[module_num:40|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notes:['Measure the neighbors metric of nuclei. This is necessary to check the nuclei that have more neighbor which will be the most inner nuclei. This will be use as a reference of the inner mass. ']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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:41|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notes:['Based on the metrics of the previous image it is selected the nuclei with more neighbors. This nuclei will be the Most_inner_Cell. (should be the most_inner_nuclei)']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
    Select the objects to filter:Nuclei
    Name the output objects:Most_inner_Cell
    Select the filtering mode:Measurements
    Select the filtering method:Maximal
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_Adjacent
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
ConvertObjectsToImage:[module_num:42|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notes:['convert this nuclei as an image to calculate the distance map. With this distance map we can select cells that are part of the inner mass.']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
    Select the input objects:Most_inner_Cell
    Name the output image:Most_inner_Cell_img
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:43|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notes:['invert the image to get pixels closer to the inner nuclei as a 0 and the pixel farest as a 1.']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Not_most_innercell
    Image or measurement?:Image
    Select the first image:Most_inner_Cell_img
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
DistanceTransform:[module_num:44|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notes:['Claculate the distance map of the inner nuclei']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
    Select the input image:Not_most_innercell
    Name the output image:DistanceMap_Most_InnerCell
    Rescale values from 0 to 1?:Yes

MeasureObjectIntensity:[module_num:45|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notes:['Based on the Distance map image from the Blastoid object and inner nuclei object, calculate the distance of cells and nuclei objects.']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
    Select images to measure:DistanceMap_Blastoid, DistanceMap_Most_InnerCell
    Select objects to measure:Cells_objects, Nuclei

FilterObjects:[module_num:46|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notes:['This module will retain the cells that are in the peripheral of the blastoid, which we called outer cells. If you increase the maximum value to, for example 0.5, it will take cells that are more inside of the blastoid, which could be also part of the inner cells. Then be carefull to set this number as minimum as possible to just take the outer cells or the most external layer of cells.']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
    Select the objects to filter:Cells_objects
    Name the output objects:InnerCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:Outer_cells
    Select the measurement to filter by:Intensity_MeanIntensity_DistanceMap_Blastoid
    Filter using a minimum measurement value?:Yes
    Minimum value:0.28
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_DistanceMap_Most_InnerCell
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.2
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
RelateObjects:[module_num:47|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notes:['Relate the innerCells to the Nuclei objects to get now the inner Nuclei.']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
    Parent objects:InnerCells
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:InnerNuclei
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
MeasureObjectIntensity:[module_num:48|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notes:['calculate the distance of the InnerNuclei in the distance maps generated']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
    Select images to measure:DistanceMap_Blastoid, DistanceMap_Most_InnerCell
    Select objects to measure:InnerNuclei

FilterObjects:[module_num:49|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notes:['here  there ia a other filter to be sure that the inner nuclei will be one that is close to the inner cell and far from the border.']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
    Select the objects to filter:InnerNuclei
    Name the output objects:InnerNuclei_final
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_DistanceMap_Most_InnerCell
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.2
    Select the measurement to filter by:Intensity_MinIntensity_DistanceMap_Blastoid
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:50|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notes:['calculate the distance of the innerNuclei_final based on the DistanceMap_Most_InnerCell']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
    Select images to measure:DistanceMap_Most_InnerCell
    Select objects to measure:InnerNuclei_final

RelateObjects:[module_num:51|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notes:['relate this inner nuclei selected with the main group of Nuclei obtained previously.  ']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
    Parent objects:Nuclei
    Child objects:InnerNuclei_final
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:52|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notes:['here, also is related the nuclei object to the outer_cells  and keep those objects as a OuterNuclei']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
    Parent objects:Outer_cells
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:OuterNuclei
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
MeasureObjectNeighbors:[module_num:53|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notes:['Calculate the neighbors of outerNuclei with the InnerNuclei_final.']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
    Select objects to measure:OuterNuclei
    Select neighboring objects to measure:InnerNuclei_final
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:54|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notes:['Calculate the neighbors of InnerNuclei_final with outerNuclei.']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
    Select objects to measure:InnerNuclei_final
    Select neighboring objects to measure:OuterNuclei
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:55|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notes:['This step select the outer nuclei that are touching the inner nuclei. The criteria is based of the negihbors that was measure in the previous module. Then, here theouter cell will be classify as a polar if at least is touching one nuclei from the inner nuclei group. ']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enabled:False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
    Select the objects to filter:OuterNuclei
    Name the output objects:PolarNuclei_FirstClosestNeighbor
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_InnerNuclei_final_Expanded
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:56|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notes:['This step select the outer nuclei that are touching the inner nuclei. The criteria is based of the negihbors that was measure in the previous module. Then, here the outer cell will be classify as a polar if at least is touching one nuclei from the inner nuclei group. ']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
    Select the objects to filter:OuterNuclei
    Name the output objects:PolarNuclei_FirstClosestNeighbor
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:OuterNuclei_filteredFirstPolar
    Select the measurement to filter by:Neighbors_NumberOfNeighbors_InnerNuclei_final_Expanded
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MeasureObjectNeighbors:[module_num:57|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notes:['']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
    Select objects to measure:OuterNuclei_filteredFirstPolar
    Select neighboring objects to measure:PolarNuclei_FirstClosestNeighbor
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:58|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
    Select objects to measure:PolarNuclei_FirstClosestNeighbor
    Select neighboring objects to measure:OuterNuclei_filteredFirstPolar
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:59|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
    Select the objects to filter:OuterNuclei_filteredFirstPolar
    Name the output objects:PolarNuclei_SecondClosestNeighbor
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_PolarNuclei_FirstClosestNeighbor_Expanded
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:60|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notes:['combine  the polar nuclei that are touching the inner nuclei and the nuclei that are touching the polar nuclei. We have two layer of polar nuclei, because sometimes the pollar nuclei that are touching the inner nuclei leave some nuclei that were in the outer layer without classification. Then become necessary add this "second layer" of polar nuclei to include the nuclei that were discarded in the first classification.']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
    Select initial object set:PolarNuclei_FirstClosestNeighbor
    Select object set to combine:PolarNuclei_SecondClosestNeighbor
    Select how to handle overlapping objects:Merge
    Name the combined object set:PolarNuclei_final

RelateObjects:[module_num:61|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
    Parent objects:OuterNuclei
    Child objects:PolarNuclei_final
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:62|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
    Select the objects to filter:OuterNuclei
    Name the output objects:pre_MuralNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_InnerNuclei_final_Expanded
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:0.9
    Select the measurement to filter by:Children_PolarNuclei_final_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:0.9
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
MeasureObjectIntensity:[module_num:63|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
    Select images to measure:DistanceMap_Most_InnerCell
    Select objects to measure:pre_MuralNuclei

FilterObjects:[module_num:64|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notes:['this module is used to avoid to get some mural nuclei in the polar region. This in general is not necessary, only will be applied if any of the outer nuclei in the polar region was not classified as a polar nuclei.']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
    Select the objects to filter:pre_MuralNuclei
    Name the output objects:MuralNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MinIntensity_DistanceMap_Most_InnerCell
    Filter using a minimum measurement value?:Yes
    Minimum value:0.06
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:65|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
    Parent objects:MuralNuclei
    Child objects:Cells_objects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:MuralCells_final
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
RelateObjects:[module_num:66|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
    Parent objects:PolarNuclei_final
    Child objects:Cells_objects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:PolarCells_final
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
MeasureObjectNeighbors:[module_num:67|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
    Select objects to measure:PolarCells_final
    Select neighboring objects to measure:MuralCells_final
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:68|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
    Select objects to measure:MuralCells_final
    Select neighboring objects to measure:PolarCells_final
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:69|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
    Select the objects to filter:MuralCells_final
    Name the output objects:TransitionCell
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:MuralCells_noTransitionCell
    Select the measurement to filter by:Neighbors_NumberOfNeighbors_PolarCells_final_Expanded
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:70|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
    Select images to measure:DistanceMap_Most_InnerCell
    Select objects to measure:TransitionCell

FilterObjects:[module_num:71|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notes:['This will discard the transitional cells that are very far of the inner mass.']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
    Select the objects to filter:TransitionCell
    Name the output objects:TransitionCell_final
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MaxIntensity_DistanceMap_Most_InnerCell
    Filter using a minimum measurement value?:Yes
    Minimum value:0.2
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:72|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
    Parent objects:MuralCells_noTransitionCell
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:MuralNuclei_final
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
RelateObjects:[module_num:73|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
    Parent objects:TransitionCell_final
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:TransitionNuclei_final
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
MeasureObjectNeighbors:[module_num:74|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
    Select objects to measure:MuralNuclei_final
    Select neighboring objects to measure:TransitionNuclei_final
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:75|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
    Select the objects to filter:MuralNuclei_final
    Name the output objects:MuralNuclei_final_filtered1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:MuralNuclei_layer1_final
    Select the measurement to filter by:Neighbors_NumberOfNeighbors_TransitionNuclei_final_20
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
MeasureObjectNeighbors:[module_num:76|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
    Select objects to measure:MuralNuclei_final_filtered1
    Select neighboring objects to measure:MuralNuclei_layer1_final
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:77|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
    Select the objects to filter:MuralNuclei_final_filtered1
    Name the output objects:MuralNuclei_final_filtered2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:MuralNuclei_layer2_final
    Select the measurement to filter by:Neighbors_NumberOfNeighbors_MuralNuclei_layer1_final_20
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
MeasureObjectNeighbors:[module_num:78|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
    Select objects to measure:MuralNuclei_final_filtered2
    Select neighboring objects to measure:MuralNuclei_layer2_final
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:79|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
    Select the objects to filter:MuralNuclei_final_filtered2
    Name the output objects:MuralNuclei_final_filtered3
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:MuralNuclei_layer3_final
    Select the measurement to filter by:Neighbors_NumberOfNeighbors_MuralNuclei_layer2_final_20
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
ResizeObjects:[module_num:80|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
    Select the input object:InnerNuclei_final
    Name the output object:InnerNuclei_final_Resize
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:81|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notes:['Nuclei_orig was renamed as a Nuclei_resize. Rembember do the math on Nuclei Resize']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
    Select the input object:Nuclei
    Name the output object:Nuclei_resize
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:82|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notes:['Cell_orig was renamed as a Cells_objects_resize. Rembember do the math on the correct resized objects']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
    Select the input object:Cells_objects
    Name the output object:Cells_objects_resize
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:83|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
    Select the input object:PolarNuclei_final
    Name the output object:PolarNuclei_resize
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:84|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
    Select the input object:MuralNuclei_final
    Name the output object:MuralNuclei_resize
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:85|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
    Select the input object:TransitionNuclei_final
    Name the output object:TransitionNuclei_resize
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:86|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
    Select the input object:MuralNuclei_layer1_final
    Name the output object:MuralNuclei_layer1_resize
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:87|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
    Select the input object:MuralNuclei_layer2_final
    Name the output object:MuralNuclei_layer2_resize
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:88|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
    Select the input object:MuralNuclei_layer3_final
    Name the output object:MuralNuclei_layer3_resize
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:89|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
    Select the input object:MuralNuclei_final_filtered3
    Name the output object:Mural_Nuclei_final_filtered3_resize
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:90|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
    Select the input object:PolarCells_final
    Name the output object:PolarCell_final_resize
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:91|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
    Select the input object:Blastoid_object_final
    Name the output object:Blastoid_object_resize
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ResizeObjects:[module_num:92|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
    Select the input object:PolarCells_final
    Name the output object:PolarCells_resize
    Method:Match Image
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    Select the image with the desired dimensions:DNA

ConvertObjectsToImage:[module_num:93|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
    Select the input objects:Most_inner_Cell
    Name the output image:Most_inner_Cell_resize
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:94|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
    Select the input objects:PolarNuclei_resize
    Name the output image:PolarNuclei_label
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:95|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
    Select the input objects:MuralNuclei_resize
    Name the output image:MuralNuclei_label
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:96|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
    Select the input objects:InnerNuclei_final_Resize
    Name the output image:InnerNuclei_label
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:97|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
    Select the input objects:Blastoid_object_resize
    Name the output image:Blastoid_image_resize
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:98|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
    Select the input objects:TransitionNuclei_resize
    Name the output image:TransitionNuclei_labeled
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:99|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
    Select the input objects:PolarCells_resize
    Name the output image:PolarCells_image_resize
    Select the color format:uint16
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
OverlayOutlines:[module_num:100|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA_HE
    Name the output image:OrigOverlay_DNA
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:PolarNuclei_resize
    Select outline color:Green
    Select objects to display:MuralNuclei_resize
    Select outline color:Blue
    Select objects to display:TransitionNuclei_resize
    Select outline color:Yellow
    Select objects to display:InnerNuclei_final_Resize

OverlayOutlines:[module_num:101|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Cdx2_HE
    Name the output image:OrigOverlay_Cdx2
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:PolarNuclei_resize
    Select outline color:Green
    Select objects to display:MuralNuclei_resize
    Select outline color:Blue
    Select objects to display:TransitionNuclei_resize
    Select outline color:Yellow
    Select objects to display:InnerNuclei_final_Resize

OverlayOutlines:[module_num:102|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Krt8_HE
    Name the output image:OrigOverlay_Krt8
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:PolarNuclei_resize
    Select outline color:Green
    Select objects to display:MuralNuclei_resize
    Select outline color:Blue
    Select objects to display:TransitionNuclei_resize
    Select outline color:Yellow
    Select objects to display:InnerNuclei_final_Resize

OverlayOutlines:[module_num:103|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:EcadCM_HE
    Name the output image:OrigOverlay_Ecad
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:PolarNuclei_resize
    Select outline color:Green
    Select objects to display:MuralNuclei_resize
    Select outline color:Blue
    Select objects to display:TransitionNuclei_resize
    Select outline color:Yellow
    Select objects to display:InnerNuclei_final_Resize

OverlayOutlines:[module_num:104|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
    Display outlines on a blank image?:Yes
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    Name the output image:OrigOverlay_DNA_MuralFiltered
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:MuralNuclei_resize

OverlayOutlines:[module_num:105|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
    Display outlines on a blank image?:Yes
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    Name the output image:OrigOverlay_DNA_Transition
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:TransitionNuclei_resize

OverlayOutlines:[module_num:106|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
    Display outlines on a blank image?:Yes
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    Name the output image:OrigOverlay_DNA_ICM
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:InnerNuclei_final_Resize

OverlayOutlines:[module_num:107|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enabled:False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
    Display outlines on a blank image?:Yes
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    Name the output image:OrigBlastoid
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:Blastoid_object_resize

OverlayOutlines:[module_num:108|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
    Display outlines on a blank image?:Yes
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    Name the output image:OrigPolarNuclei_outline
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:PolarNuclei_resize

OverlayOutlines:[module_num:109|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
    Display outlines on a blank image?:Yes
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    Name the output image:OrigPolar_outline
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:PolarCells_resize

MeasureObjectSizeShape:[module_num:110|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
    Select object sets to measure:Cells_objects_resize, MuralNuclei_resize, Nuclei_resize, PolarNuclei_resize
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

MeasureObjectNeighbors:[module_num:111|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
    Select objects to measure:Nuclei_resize
    Select neighboring objects to measure:Nuclei_resize
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensity:[module_num:112|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
    Select images to measure:DNA, EcadCM, Factin, SOX2
    Select objects to measure:Cells_objects_resize, MuralNuclei_resize, Nuclei_resize, PolarNuclei_resize

RelateObjects:[module_num:113|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
    Parent objects:Nuclei_resize
    Child objects:PolarNuclei_resize
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:114|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
    Parent objects:Nuclei_resize
    Child objects:MuralNuclei_resize
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:115|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
    Parent objects:Nuclei_resize
    Child objects:InnerNuclei_final_Resize
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:116|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
    Parent objects:Nuclei_resize
    Child objects:TransitionNuclei_resize
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:117|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
    Parent objects:Nuclei_resize
    Child objects:Cells_objects_resize
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
CalculateMath:[module_num:118|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enabled:False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
    Name the output measurement:Nuclei_Cdx2overDNA
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei_resize
    Select the numerator measurement:Intensity_MeanIntensity_Cdx2
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei_resize
    Select the denominator measurement:Intensity_MeanIntensity_DNA
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:119|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enabled:False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
    Name the output measurement:Nuclei_Krt8overDNA
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cells_objects_resize
    Select the numerator measurement:Intensity_MeanIntensity_Krt8
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei_resize
    Select the denominator measurement:Intensity_MeanIntensity_DNA
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:120|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enabled:False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
    Name the output measurement:Nuclei_EcadoverDNA
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cells_objects_resize
    Select the numerator measurement:Intensity_MeanIntensity_EcadCM
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei_resize
    Select the denominator measurement:Intensity_MeanIntensity_DNA
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
SaveImages:[module_num:121|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay_DNA
    Select method for constructing file names:Single name
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    Enter single file name:\g<Experiment>_Overlay_DNA
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:122|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
    Select the type of image to save:Image
    Select the image to save:OrigPolarNuclei_outline
    Select method for constructing file names:Single name
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    Enter single file name:\g<Experiment>_origPolarNuclei_outline
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:123|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay_DNA_MuralFiltered
    Select method for constructing file names:Single name
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    Enter single file name:\g<Experiment>_MuralFiltered_outline
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:124|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay_DNA_Transition
    Select method for constructing file names:Single name
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    Enter single file name:\g<Experiment>_Transition_outline
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:125|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay_DNA_ICM
    Select method for constructing file names:Single name
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    Enter single file name:\g<Experiment>_ICM_outline
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:126|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:StarDist_segmentation
    Select method for constructing file names:Single name
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    Enter single file name:\g<Experiment>_stardist_segmentationfnet
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:127|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigPolar_outline
    Select method for constructing file names:Single name
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    Enter single file name:\g<Experiment>_OrigPolar_outline
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:128|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:ResizeDNA
    Select method for constructing file names:Single name
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    Enter single file name:\g<Experiment>_DNA_resize
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:129|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay_Cdx2
    Select method for constructing file names:Single name
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    Enter single file name:\g<Experiment>_\g<Site>_Overlay_Cdx2
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:130|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay_Ecad
    Select method for constructing file names:Single name
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    Enter single file name:\g<Experiment>_\g<Site>_Overlay_Ecad
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:131|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay_Krt8
    Select method for constructing file names:Single name
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    Enter single file name:\g<Experiment>_\g<Site>_Overlay_Krt8
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:132|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Blastoid_image_resize
    Select method for constructing file names:Single name
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    Enter single file name:\g<Experiment>_\g<Site>_Overlay_Blastoid
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:133|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:PolarCells_image_resize
    Select method for constructing file names:Single name
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    Enter single file name:\g<Experiment>_\g<Site>_PolarCell_label
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:134|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:PolarNuclei_label
    Select method for constructing file names:Single name
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    Enter single file name:\g<Experiment>_\g<Site>_PolarNuclei_label
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:135|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:TransitionNuclei_labeled
    Select method for constructing file names:Single name
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    Enter single file name:\g<Experiment>_\g<Site>_Transition_Nuclei_label
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:136|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:MuralNuclei_label
    Select method for constructing file names:Single name
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    Enter single file name:\g<Experiment>_\g<Site>_Mural_nuclei_label
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:137|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:InnerNuclei_label
    Select method for constructing file names:Single name
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    Enter single file name:\g<Experiment>_\g<Site>_InnerNuclei_label
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    Saved file format:tiff
    Output file location:Default Output Folder|3D_blastoid/20211216_blastocyst_cellpainting_cdx2_krt8_ecad_hoechst_241148/results/nuclei/test_2
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:138|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|F:\\ReRun\\blastocyst_Cdx2_Krt8_Ecad_Hoechst_241530_244256_241148\\all_experiments\\Paula\\20231116\\csv
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_Original
    Overwrite existing files without warning?:Yes
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