CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:31
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r(?P<WellRow>\d{2})c(?P<WellColumn>\d{2})f(?P<Site>\d{2})p\d{2}-ch(?P<ChannelNumber>\d)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\/](?P<Disease_Group>.*)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:6
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:ER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:RNA_nucleoli
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:Membrane
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "5")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "6")
    Name to assign these images:Brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Segment all the nuclei in the field']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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei_all
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:3
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.1,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

ImageMath:[module_num:6|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notes:['Sum the signal of Mitocondria and Mebrane to have a brigther cytoplasm signal.']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Cellsignal
    Image or measurement?:Image
    Select the first image:Mito
    Multiply the first image by:0.2
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    Image or measurement?:Image
    Select the second image:Membrane
    Multiply the second image by:1.0
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
IdentifySecondaryObjects:[module_num:7|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notes:['Segment cells based on the signal intensity of mitocondria and membrane']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
    Select the input objects:Nuclei_all
    Name the objects to be identified:Cells_all
    Select the method to identify the secondary objects:Propagation
    Select the input image:Cellsignal
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    Regularization factor:0
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.5
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.05,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:100
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    Thresholding method:Otsu

IdentifyTertiaryObjects:[module_num:8|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notes:['Get cytoplasm compartment']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
    Select the larger identified objects:Cells_all
    Select the smaller identified objects:Nuclei_all
    Name the tertiary objects to be identified:Cytoplasm_all
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:9|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notes:['measuro object size of Cells and Nuclei to get a ratio which we will use to differientiate the PR of the neurons. ']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
    Select object sets to measure:Cells_all, Nuclei_all
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

CalculateMath:[module_num:10|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notes:['Calculate de are ratio between Nuclei and Cells. The cytoplasm area of neurons is smaller compare with the progenitor, then we are using this measurment to filter out neurons.']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
    Name the output measurement:area_ratio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei_all
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cells_all
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
FilterObjects:[module_num:11|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notes:['Fisrt filter of neuron based on area. in general the area of progenitor is bigger than neurons']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
    Select the objects to filter:Cells_all
    Name the output objects:Cells_PR1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:Neurons1
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:600
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Math_area_ratio
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:.65
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
MeasureObjectSizeShape:[module_num:12|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notes:['measure object size of progenitor ']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
    Select object sets to measure:Cells_PR1
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

FilterObjects:[module_num:13|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notes:['this a second filter used to filter out the progenitors which are elongated, because those are probably a neuron']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
    Select the objects to filter:Cells_PR1
    Name the output objects:Cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:2
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:Neurons2
    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.99
    Select additional object to relabel:Nuclei_all
    Name the relabeled objects:Nuclei
    Select additional object to relabel:Cytoplasm_all
    Name the relabeled objects:Cytoplasm
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
CombineObjects:[module_num:14|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notes:['Combine the neurons got in the previous filters']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
    Select initial object set:Neurons2
    Select object set to combine:Neurons1
    Select how to handle overlapping objects:Merge
    Name the combined object set:Neurons

EnhanceOrSuppressFeatures:[module_num:15|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
    Select the input image:Mito
    Name the output image:Mito_speckles
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:16|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
    Select the input image:RNA_nucleoli
    Name the output image:RNA_nucleoli_speckles
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:17|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
    Select the input image:Mito_speckles
    Name the output image:Mito_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm
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    Invert the mask?:No

MaskImage:[module_num:18|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
    Select the input image:RNA_nucleoli_speckles
    Name the output image:RNA_nucloeli_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:19|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
    Select the input image:Mito_masked
    Name the primary objects to be identified:Mitocondria_segmented
    Typical diameter of objects, in pixel units (Min,Max):5,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.08,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:20|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
    Select the input image:RNA_nucloeli_masked
    Name the primary objects to be identified:Nucleoli_segmented
    Typical diameter of objects, in pixel units (Min,Max):5,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.08,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
OverlayObjects:[module_num:21|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enabled:False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
    Input:DNA
    Name the output image:Nucleoli_cells
    Objects:Nucleoli_segmented
    Opacity:0.2

OverlayObjects:[module_num:22|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enabled:False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
    Input:Brightfield
    Name the output image:Brightfield_cells
    Objects:CellsPR_filtered
    Opacity:0.2

OverlayObjects:[module_num:23|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enabled:False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
    Input:Brightfield
    Name the output image:Nuerons_overlay
    Objects:Neurons
    Opacity:0.2

OverlayObjects:[module_num:24|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enabled:False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
    Input:Membrane
    Name the output image:AGP_cells
    Objects:CellsPR_filtered
    Opacity:0.2

MeasureObjectIntensity:[module_num:25|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
    Select images to measure:DNA, ER, Membrane, Mito, RNA_nucleoli
    Select objects to measure:Cells, Cytoplasm, Mitocondria_segmented, Neurons, Nuclei, Nucleoli_segmented

MeasureImageIntensity:[module_num:26|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
    Select images to measure:Brightfield, DNA, ER, Membrane, Mito, RNA_nucleoli
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Cells, Cytoplasm, Mitocondria_segmented, Neurons, Nuclei, Nucleoli_segmented
    Calculate custom percentiles:No
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
MeasureObjectSizeShape:[module_num:27|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
    Select object sets to measure:Cells, Mitocondria_segmented, Neurons, Nuclei, Nucleoli_segmented
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

RelateObjects:[module_num:28|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
    Parent objects:Cells
    Child objects:Mitocondria_segmented
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:29|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
    Parent objects:Nuclei
    Child objects:Nucleoli_segmented
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:30|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:Yes
    Select source of sample row name:Metadata
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    Select the metadata to use as the identifier:FileName_DNA
    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:DATA_objects.csv
    Use the object name for the file name?:No
    Data to export:Mitocondria_segmented
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Cells_filtered
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Nucleoli_segmented
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes

ExportToDatabase:[module_num:31|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:Progenitor_database.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:Cells,Cytoplasm,Mitocondria_segmented,Neurons,Nuclei,Nucleoli_segmented
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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