CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Protein>.*)_(?P<Well>[A-P][0-9]{1,2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9]).TIF
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'DNA': 'Well', 'GAL9': 'Well', 'Membrane': 'Well', 'LNP': 'Well'}, {'DNA': 'Site', 'GAL9': 'Site', 'Membrane': 'Site', 'LNP': 'Site'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:Membrane
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:GAL9
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:LNP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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enabled:False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
    Select the input image:DNA
    Name the output image:CropDNA
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,end
    Top and bottom rectangle positions:0,2000
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    Remove empty rows and columns?:All
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
Crop:[module_num:6|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enabled:False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
    Select the input image:GAL9
    Name the output image:CropGal9
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,end
    Top and bottom rectangle positions:0,2000
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    Remove empty rows and columns?:All
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
FlagImage:[module_num:7|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enabled:False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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:None
    Flag images based on low values?:Yes
    Minimum value:0.0
    Flag images based on high values?:Yes
    Maximum value:1.0
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    Ignore flag skips on last cycle?:No

FlagImage:[module_num:8|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enabled:False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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:Metadata_ChannelNumber
    Flag images based on low values?:Yes
    Minimum value:2.5
    Flag images based on high values?:Yes
    Maximum value:3.5
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    Ignore flag skips on last cycle?:No

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:DNA
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):60,350
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MedianFilter:[module_num:10|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
    Select the input image:GAL9
    Name the output image:MedianGal9
    Window:5

MedianFilter:[module_num:11|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
    Select the input image:LNP
    Name the output image:MedianLNP
    Window:5

EnhanceOrSuppressFeatures:[module_num:12|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
    Select the input image:MedianGal9
    Name the output image:EnhanceGAL9
    Select the operation:Enhance
    Feature size:14
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:13|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
    Select the input image:MedianLNP
    Name the output image:EnhanceLNP
    Select the operation:Enhance
    Feature size:14
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:EnhanceGAL9
    Name the primary objects to be identified:Punc_GAL
    Typical diameter of objects, in pixel units (Min,Max):3,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.03,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:EnhanceLNP
    Name the primary objects to be identified:Punc_LNP
    Typical diameter of objects, in pixel units (Min,Max):2,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.03,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:5
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    Thresholding method:Otsu

MeasureObjectIntensity:[module_num:16|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
    Select images to measure:GAL9, LNP
    Select objects to measure:Punc_GAL, Punc_LNP

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GAL9
    Name the output image:OrigOverlay_Gal9
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#21FF06
    Select objects to display:Punc_GAL

OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:LNP
    Name the output image:OrigOverlay_LNP
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#21FF06
    Select objects to display:Punc_LNP

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay_Gal9
    Select method for constructing file names:From image filename
    Select image name for file prefix:GAL9
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay_LNP
    Select method for constructing file names:From image filename
    Select image name for file prefix:LNP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

CalculateMath:[module_num:21|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
    Name the output measurement:Ratio_Gal9
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Punc_GAL
    Select the numerator measurement:Number_Object_Number
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:nuclei
    Select the denominator measurement:Number_Object_Number
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:22|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
    Name the output measurement:Ratio_LNP
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Punc_LNP
    Select the numerator measurement:Number_Object_Number
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:nuclei
    Select the denominator measurement:Number_Object_Number
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:23|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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