CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:47
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Cell_line>[\S]{3})\sR(?P<Replicate>[0-9])_(?P<Well>.*)_col(?P<ColonyNumber>.*)_C(?P<Channel>[0-9]).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'DNA': 'Cell_line', 'MAP2': 'Cell_line', 'NESTIN': 'Cell_line', 'TUJ1': 'Cell_line'}, {'DNA': 'ColonyNumber', 'MAP2': 'ColonyNumber', 'NESTIN': 'ColonyNumber', 'TUJ1': 'ColonyNumber'}, {'DNA': 'Well', 'MAP2': 'Well', 'NESTIN': 'Well', 'TUJ1': 'Well'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "2")
    Name to assign these images:MAP2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "3")
    Name to assign these images:TUJ1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "4")
    Name to assign these images:NESTIN
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):40,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,0.2
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
FlagImage:[module_num:6|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enabled:False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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Classifier
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    Classifier file location:Elsewhere...|
    Classifier file name:rules.txt
    Class number:2
    Allow fuzzy feature matching?:No
    Ignore flag skips on last cycle?:No

DilateObjects:[module_num:7|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
    Select the input object:nuclei
    Name the output object:Dilate_nuclei
    Structuring element:disk,3

ImageMath:[module_num:8|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Organoid_projected
    Image or measurement?:Image
    Select the first image:DNA
    Multiply the first image by:0.5
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    Image or measurement?:Image
    Select the second image:MAP2
    Multiply the second image by:3
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    Image or measurement?:Image
    Select the third image:NESTIN
    Multiply the third image by:3
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    Image or measurement?:Image
    Select the fourth image:TUJ1
    Multiply the fourth image by:3
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:nuclei
    Name the objects to be identified:Organoid
    Select the method to identify the secondary objects:Propagation
    Select the input image:Organoid_projected
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,0.02
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
EnhanceOrSuppressFeatures:[module_num:10|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
    Select the input image:TUJ1
    Name the output image:TUJ1_enhanced
    Select the operation:Enhance
    Feature size:30
    Feature type:Neurites
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    Smoothing scale:1
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    Enhancement method:Line structures
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    Rescale result image:No

Threshold:[module_num:11|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
    Select the input image:TUJ1_enhanced
    Name the output image:Threshold_tuj1e
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,0.05
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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    Size of adaptive window:20
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    Thresholding method:Otsu

MaskImage:[module_num:12|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
    Select the input image:Threshold_tuj1e
    Name the output image:Threshold_tuj1e_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Organoid
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    Invert the mask?:No

MorphologicalSkeleton:[module_num:13|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
    Select the input image:Threshold_tuj1e_masked
    Name the output image:MorphologicalSkeleton

MeasureObjectSkeleton:[module_num:14|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
    Select the seed objects:nuclei
    Select the skeletonized image:MorphologicalSkeleton
    Retain the branchpoint image?:Yes
    Name the branchpoint image:BranchpointImage
    Fill small holes?:No
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:Threshold_tuj1e
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

ErodeObjects:[module_num:15|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notes:['The organoid is eroded in order to obtain the peripheral zone of the organoid']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
    Select the input object:Organoid
    Name the output object:organoid_eroded
    Structuring element:disk,15
    Prevent object removal:Yes
    Relabel resulting objects:No

MaskObjects:[module_num:16|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notes:['The organoid were mask for the eroded_organoid to get the peripheral zone which was called peripheralOrganoid']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
    Select objects to be masked:Organoid
    Name the masked objects:peripheralOrganoid
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:organoid_eroded
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskImage:[module_num:17|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notes:['The intensity in the peripheral zone was retained with the mask of the peripheral zone created']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
    Select the input image:Threshold_tuj1e
    Name the output image:tuj1e_peripheral
    Use objects or an image as a mask?:Objects
    Select object for mask:peripheralOrganoid
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    Invert the mask?:No

MorphologicalSkeleton:[module_num:18|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notes:['The skeleton of the peripheral zone was obtained. The skeleton is the same that was generated previously, the only difference is that it is filtered by the zone.']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
    Select the input image:tuj1e_peripheral
    Name the output image:MorphologicalSkeleton

MeasureObjectSkeleton:[module_num:19|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notes:['Obtaining the branch, trunk, end and starting point.', 'The branchin can be obtained directly from the table. The thickness  of neurites could be obtained dividing the number of pixel of the segmentation by the sum og the edges from the skeleton.', '']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
    Select the seed objects:organoid_eroded
    Select the skeletonized image:MorphologicalSkeleton
    Retain the branchpoint image?:Yes
    Name the branchpoint image:Branchpoint_peripheral
    Fill small holes?:No
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:Threshold_tuj1e
    File output directory:Default Output Folder|
    Vertex file name:vertices_peripheral.csv
    Edge file name:edges_peripheral.csv

IdentifyTertiaryObjects:[module_num:20|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
    Select the larger identified objects:Organoid
    Select the smaller identified objects:Dilate_nuclei
    Name the tertiary objects to be identified:network
    Shrink smaller object prior to subtraction?:Yes

MeasureImageAreaOccupied:[module_num:21|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notes:['This could be used to calculate the thickness relative to the total lenght of neurites', 'The density is given by the ration between the area occupied by the neurites and the total area of the peripheral zone.']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
    Measure the area occupied by:Binary Image
    Select binary images to measure:Threshold_tuj1e
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
MeasureImageAreaOccupied:[module_num:22|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
    Measure the area occupied by:Binary Image
    Select binary images to measure:tuj1e_peripheral
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
MeasureObjectIntensityDistribution:[module_num:23|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
    Select images to measure:MAP2, TUJ1
    Hidden:1
    Hidden:1
    Hidden:2
    Calculate intensity Zernikes?:None
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    Select objects to measure:Organoid
    Object to use as center?:Edges of other objects
    Select objects to use as centers:Dilate_nuclei
    Scale the bins?:Yes
    Number of bins:4
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    Image:MAP2
    Objects to display:Do not use
    Number of bins:4
    Measurement:Mean Fraction
    Color map:Reds
    Save display as image?:Yes
    Output image name:Heatmap_MAP2
    Image:TUJ1
    Objects to display:Do not use
    Number of bins:4
    Measurement:Mean Fraction
    Color map:Blues
    Save display as image?:Yes
    Output image name:Heatmap_TUJ1

MeasureObjectIntensity:[module_num:24|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
    Select images to measure:DNA, MAP2, NESTIN, TUJ1
    Select objects to measure:network, nuclei, peripheralOrganoid

MeasureObjectSizeShape:[module_num:25|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
    Select object sets to measure:Organoid, network, nuclei, peripheralOrganoid
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:26|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
    Select images to measure:DNA, MAP2, NESTIN, TUJ1
    Select objects to measure:network, nuclei, peripheralOrganoid
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

CalculateMath:[module_num:27|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
    Name the output measurement:Average_network_neurites_width
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_Threshold_tuj1e
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:nuclei
    Select the denominator measurement:ObjectSkeleton_TotalObjectSkeletonLength_MorphologicalSkeleton
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:28|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
    Name the output measurement:Average_neurites_width
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_tuj1e_peripheral
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:organoid_eroded
    Select the denominator measurement:ObjectSkeleton_TotalObjectSkeletonLength_MorphologicalSkeleton
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
MaskImage:[module_num:29|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
    Select the input image:TUJ1_enhanced
    Name the output image:TUJ1_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:network
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    Invert the mask?:No

MaskImage:[module_num:30|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
    Select the input image:MAP2
    Name the output image:MAP2_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:network
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    Invert the mask?:No

MaskImage:[module_num:31|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
    Select the input image:NESTIN
    Name the output image:NESTIN_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:network
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    Invert the mask?:No

RescaleIntensity:[module_num:32|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
    Select the input image:NESTIN_masked
    Name the output image:NESTIN_Rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:33|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
    Select the input image:MAP2_masked
    Name the output image:MAP2_Rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:34|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
    Select the input image:TUJ1_masked
    Name the output image:TUJ1_Rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:35|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:OverlayDNA
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#21FFFF
    Select objects to display:peripheralOrganoid
    Select outline color:#0000FF
    Select objects to display:nuclei
    Select outline color:#21FF06
    Select objects to display:Organoid

OverlayOutlines:[module_num:36|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:TUJ1_enhanced
    Name the output image:OverlayTUJ1
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#21FFFF
    Select objects to display:peripheralOrganoid
    Select outline color:#0000FF
    Select objects to display:nuclei
    Select outline color:#21FF06
    Select objects to display:Organoid

OverlayOutlines:[module_num:37|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NESTIN
    Name the output image:OverlayNESTIN
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#21FFFF
    Select objects to display:peripheralOrganoid
    Select outline color:#0000FF
    Select objects to display:nuclei
    Select outline color:#21FF06
    Select objects to display:Organoid

OverlayOutlines:[module_num:38|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MAP2
    Name the output image:OverlayMAP2
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#21FFFF
    Select objects to display:peripheralOrganoid
    Select outline color:#0000FF
    Select objects to display:nuclei
    Select outline color:#21FF06
    Select objects to display:Organoid

SaveImages:[module_num:39|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
    Select the type of image to save:Image
    Select the image to save:OverlayNESTIN
    Select method for constructing file names:From image filename
    Select image name for file prefix:NESTIN
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:OverlayTUJ1
    Select method for constructing file names:From image filename
    Select image name for file prefix:TUJ1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:41|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
    Select the type of image to save:Image
    Select the image to save:OverlayMAP2
    Select method for constructing file names:From image filename
    Select image name for file prefix:MAP2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:42|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
    Select the type of image to save:Image
    Select the image to save:OverlayDNA
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:43|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
    Select the type of image to save:Image
    Select the image to save:TUJ1_Rescaled
    Select method for constructing file names:From image filename
    Select image name for file prefix:TUJ1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Rescaled
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:44|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
    Select the type of image to save:Image
    Select the image to save:NESTIN_Rescaled
    Select method for constructing file names:From image filename
    Select image name for file prefix:NESTIN
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Rescaled
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:45|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
    Select the type of image to save:Image
    Select the image to save:MAP2_Rescaled
    Select method for constructing file names:From image filename
    Select image name for file prefix:MAP2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Rescaled
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:46|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|RUMI_microOrganoid
    Create a GenePattern GCT file?:Yes
    Select source of sample row name:Metadata
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    Select the metadata to use as the identifier:FileName_DNA
    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:SpliteData_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:nuclei
    Combine these object measurements with those of the previous object?:Yes
    File name:DATA_objects.csv
    Use the object name for the file name?:No
    Data to export:network
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:peripheralOrganoid
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Organoid
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes

OverlayOutlines:[module_num:47|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:TUJ1_enhanced
    Name the output image:OrigOverlay_dilated
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:Dilate_nuclei
